PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'Study_name': '', 'PREPOST': '', 'Task Version (required to run)': '1 or 2'}
  Full-screen window = False
  Monitor = labMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1400, 1400]
  color = $[-0.4667, -0.4667, -0.4510]
  expName = Colour Change Detection Task Oxford PERL
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Colour_choice
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    CodeComponent ColourChoice
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)


        wedgeYellow.setAutoDraw(True)
        wedgeWhite.setAutoDraw(True)
        wedgeVermilion.setAutoDraw(True)
        wedgeRedPurple.setAutoDraw(True)

        wedgeBlack.setAutoDraw(True)
        wedgeIndigo.setAutoDraw(True)
        wedgeSkyBlue.setAutoDraw(True)
        wedgeBlueGreen.setAutoDraw(True)

        GreyCircle.setAutoDraw(True)
      Each Frame:
        if (wedgeYellow.contains(mouse)):
            wedgeYellow.lineColor = 'white'
            GuideYellow.setAutoDraw(True)
        else:
            wedgeYellow.lineColor = 'grey'
            GuideYellow.setAutoDraw(False)

        if wedgeWhite.contains(mouse):
            wedgeWhite.lineColor = 'white'
            GuideWhite.setAutoDraw(True)
        else:
            wedgeWhite.lineColor = 'grey'
            GuideWhite.setAutoDraw(False)

        if wedgeVermilion.contains(mouse):
            wedgeVermilion.lineColor = 'white'
            GuideVermilion.setAutoDraw(True)
        else:
            wedgeVermilion.lineColor = 'grey'
            GuideVermilion.setAutoDraw(False)

        if wedgeRedPurple.contains(mouse):
            wedgeRedPurple.lineColor = 'white'
            GuideRedPurple.setAutoDraw(True)
        else:
            wedgeRedPurple.lineColor = 'grey'
            GuideRedPurple.setAutoDraw(False)

        if wedgeBlack.contains(mouse):
            wedgeBlack.lineColor = 'white'
            GuideBlack.setAutoDraw(True)
        else:
            wedgeBlack.lineColor = 'grey'
            GuideBlack.setAutoDraw(False)

        if wedgeIndigo.contains(mouse):
            wedgeIndigo.lineColor = 'white'
            GuideIndigo.setAutoDraw(True)
        else:
            wedgeIndigo.lineColor = 'grey'
            GuideIndigo.setAutoDraw(False)

        if wedgeSkyBlue.contains(mouse):
            wedgeSkyBlue.lineColor = 'white'
            GuideSkyBlue.setAutoDraw(True)
        else:
            wedgeSkyBlue.lineColor = 'grey'
            GuideSkyBlue.setAutoDraw(False)

        if wedgeBlueGreen.contains(mouse):
            wedgeBlueGreen.lineColor = 'white'
            GuideBlueGreen.setAutoDraw(True)
        else:
            wedgeBlueGreen.lineColor = 'grey'
            GuideBlueGreen.setAutoDraw(False)
    MouseComponent mouse_2
      clickable = wedgeYellow, wedgeWhite, wedgeVermilion, wedgeRedPurple, wedgeBlack, wedgeIndigo, wedgeSkyBlue, wedgeBlueGreen
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      saveParamsClickable = name, fillColor
      startVal [time (s)] = 0.0
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    CodeComponent Timer_2
      Code Type = Auto->JS
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      Begin Routine:
        time_ColourSelectStart = globalClock.getTime()
      End Routine:
        time_ColourSelectEnd = globalClock.getTime()

        thisExp.addData('time_ColourSelectStart', time_ColourSelectStart)
        thisExp.addData('time_ColourSelectEnd', time_ColourSelectEnd)
  Routine Break
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    TextComponent Empty
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stimulus_display
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    TextComponent Fixation_Point
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
      text = ·
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    PolygonComponent Target
      fillColor [set every repeat] = $Targ_Colour
      lineWidth = 2
      pos [set every repeat] = $Targ_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
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    PolygonComponent Flan1
      fillColor [set every repeat] = $Flan1_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan1_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
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    PolygonComponent Flan2
      fillColor [set every repeat] = $Flan2_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan2_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
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    PolygonComponent Flan3
      fillColor [set every repeat] = $Flan3_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan3_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
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    PolygonComponent Flan4
      fillColor [set every repeat] = $Flan4_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan4_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
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    PolygonComponent Flan5
      fillColor [set every repeat] = $Flan5_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan5_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.325
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  Routine Location_choice
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    MouseComponent mouse
      clickable = Target_2, Flan1_2, Flan2_2, Flan3_2, Flan4_2, Flan5_2
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_and_timer
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
        time_LocalisationBegin = globalClock.getTime()
      Each Frame:
        if Target_2.contains(mouse):
            Target_2.lineColor = 'white'
        else:
            Target_2.lineColor = 'grey'

        if Flan1_2.contains(mouse):
            Flan1_2.lineColor = 'white'
        else:
            Flan1_2.lineColor = 'grey'

        if Flan2_2.contains(mouse):
            Flan2_2.lineColor = 'white'
        else:
            Flan2_2.lineColor = 'grey'

        if Flan3_2.contains(mouse):
            Flan3_2.lineColor = 'white'
        else:
            Flan3_2.lineColor = 'grey'

        if Flan4_2.contains(mouse):
            Flan4_2.lineColor = 'white'
        else:
            Flan4_2.lineColor = 'grey'

        if Flan5_2.contains(mouse):
            Flan5_2.lineColor = 'white'
        else:
            Flan5_2.lineColor = 'grey'
      End Routine:
        time_LocalisationEnd = globalClock.getTime()

        thisExp.addData('time_LocalisationBegin', time_LocalisationBegin)
        thisExp.addData('time_LocalisationEnd', time_LocalisationEnd)
    TextComponent Fixation_Point_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ·
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    PolygonComponent Target_2
      fillColor [set every repeat] = $Change_colour
      lineWidth = 2
      pos [set every repeat] = $Targ_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan1_2
      fillColor [set every repeat] = $Flan1_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan1_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan2_2
      fillColor [set every repeat] = $Flan2_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan2_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan3_2
      fillColor [set every repeat] = $Flan3_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan3_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan4_2
      fillColor [set every repeat] = $Flan4_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan4_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan5_2
      fillColor [set every repeat] = $Flan5_Colour
      lineWidth = 2
      pos [set every repeat] = $Flan5_Loc
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine Startup_code
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    CodeComponent Definitions
      Code Type = Auto->JS
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      Before Experiment:
        win = visual.Window(viewScale=[100,100])
      Begin Experiment:
        ##Defining colours to call throughout experiment##
        ##Colours are based on the Colour Universal Design
        ##by asataka Okabe and Kei Ito, allowing the task
        ##to be accessible to individuals with colourblindness.


        CUDSkyblue = [-0.3255, 0.4118, 0.8275]
        CUDbluegreen = [-1.0000, 0.2392, -0.0980]
        CUDyellow = [0.8824, 0.7882, -0.4824]
        CUDredpurple = [0.6000, -0.0510, 0.3098]
        CUDblack = [-1.0000, -1.0000, -1.0000]
        CUDindigo = [-0.4118, -1.0000, 0.0196]
        CUDwhite = [1,1,1]
        CUDvermilion = [0.6706, -0.2627, -1.0000]

        #CUDblue = [-1.0000, -0.1059, 0.3961]
        #CUDorange = [0.8039, 0.2471,-1.0000]

        ##Set mouse off initially
        win.setMouseVisible(False)

        #Create a ticker that adds up block progress
        BlockNo = 1
      Begin Routine:
        win.setMouseVisible(False)
        mouse.setPos(newPos=(0,0))
    CodeComponent Loading_wheel
      Code Type = Auto->JS
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      Begin Experiment:
        ###Define 8 colour wedges for choice wheel, divided by 45 degree segments

        wedgeWhite = visual.Pie(win, fillColor = CUDwhite,start = 0,end = 41, size=(0.65,0.65),interpolate=True,lineWidth=3, name = 'wedgeWhite')

        wedgeYellow = visual.Pie(win, fillColor = CUDyellow,start = 45,end = 86, size=(0.65,0.65),interpolate=True,lineWidth=3, name = 'wedgeYellow')

        wedgeVermilion = visual.Pie(win, fillColor = CUDvermilion,start = 90,end = 131, size=(0.65,0.65),interpolate=True, lineWidth=3, name = 'wedgeVermilion')

        wedgeRedPurple = visual.Pie(win, fillColor = CUDredpurple,start = 135,end = 176, size=(0.65,0.65),interpolate=True, lineWidth=3, name = 'wedgeRedPurple')

        wedgeBlack = visual.Pie(win,fillColor = CUDblack,start = 180,end = 221, size=(0.65,0.65),interpolate=True, lineWidth=3, name = 'wedgeBlack')

        wedgeIndigo = visual.Pie(win, fillColor = CUDindigo ,start = 225,end = 266, size=(0.65,0.65),interpolate=True, lineWidth=3, name = 'wedgeIndigo')

        wedgeSkyBlue = visual.Pie(win, fillColor = CUDSkyblue,start = 270,end = 311, size=(0.65,0.65),interpolate=True, lineWidth=3, name = 'wedgeSkyBlue')

        wedgeBlueGreen = visual.Pie(win, fillColor = CUDbluegreen,start = 315,end = 356, size=(0.65,0.65),interpolate=True, lineWidth=3, name = 'wedgeBlueGreen')

        ###Overlay black circle

        GreyCircle = visual.Circle(win, colorSpace='rgb255', fillColor = 'grey', size=(0.3,0.3))

        GreyCircle2 = visual.Circle(win, colorSpace='rgb255', fillColor = 'grey', size=(0.3,0.3))

        ####Draw Guide Squares

        GuideYellow = visual.Rect(win, fillColor = CUDyellow, size=(0.1,0.1))

        GuideWhite = visual.Rect(win, fillColor = CUDwhite, size=(0.1,0.1))

        GuideVermilion = visual.Rect(win, fillColor = CUDvermilion, size=(0.1,0.1))

        GuideRedPurple = visual.Rect(win, fillColor = CUDredpurple, size=(0.1,0.1))

        GuideBlack = visual.Rect(win, fillColor = CUDblack, size=(0.1,0.1))

        GuideIndigo = visual.Rect(win, fillColor = CUDindigo, size=(0.1,0.1))

        GuideSkyBlue = visual.Rect(win, fillColor = CUDSkyblue, size=(0.1,0.1))

        GuideBlueGreen = visual.Rect(win, fillColor = CUDbluegreen, size=(0.1,0.1))
    CodeComponent Background_border
      Code Type = Auto->JS
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      Begin Experiment:
        box_width = 0.95
        box_height = 0.95
        stripe_height = 0.02
        num_stripes = int(box_height / stripe_height)

        # Original grey and a slightly darker one
        colors = [[0.0, 0.0, 0.0], [-0.0525, -0.0525, -0.0525]]

        stripes = []
        for i in range(num_stripes):
            y_offset = (i + 0.5) * stripe_height - (box_height / 2)
            stripe = visual.Rect(
                win=win,
                width=box_width,
                height=stripe_height,
                pos=(0, y_offset),
                fillColor=colors[i % 2],
                fillColorSpace='rgb',
                lineColor=None
            )
            stripe.setAutoDraw(True)
            stripes.append(stripe)
    CodeComponent Task_V_Selection
      Code Type = Auto->JS
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      Begin Experiment:
        # Get and clean version input
        TaskVersion = str(expInfo.get('Task Version (required to run)', '')).strip()

        # Choose path based on version
        if TaskVersion == '1':
            basePath = 'Conditions/'
        elif TaskVersion == '2':
            basePath = 'Conditions/'
        else:
            # show error and exit
            errMsg = visual.TextStim(
                win=win,
                text="Warning: Must enter a valid task version number\n(i.e., 1, or 2). \n\n Press any key to quit.",
                color='black',
                height=0.025
            )
            errMsg.draw()
            win.flip()
            event.waitKeys()
            core.quit()

        # Construct filename
        VersionSelection = basePath + f'CCDT_master_{TaskVersion}.xlsx'
  Routine Clear_Screen
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    CodeComponent Clear_Screen_2
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(False)

        GreyCircle.setAutoDraw(False)

        wedgeYellow.setAutoDraw(False)
        wedgeWhite.setAutoDraw(False)
        wedgeVermilion.setAutoDraw(False)
        wedgeRedPurple.setAutoDraw(False)

        wedgeBlack.setAutoDraw(False)
        wedgeIndigo.setAutoDraw(False)
        wedgeSkyBlue.setAutoDraw(False)
        wedgeBlueGreen.setAutoDraw(False)

        GuideYellow.setAutoDraw(False)
        GuideWhite.setAutoDraw(False)
        GuideVermilion.setAutoDraw(False)
        GuideRedPurple.setAutoDraw(False)

        GuideBlack.setAutoDraw(False)
        GuideIndigo.setAutoDraw(False)
        GuideSkyBlue.setAutoDraw(False)
        GuideBlueGreen.setAutoDraw(False)
  Routine ISI2_2
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  Routine ISI
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    TextComponent ISI1_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_1_jitter
      text [set every repeat] = ·
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    CodeComponent Mouse_wipe
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(False)
  Routine ISI2
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    TextComponent ISI2_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_2_jitter
      text [set every repeat] = ·
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    CodeComponent Timer
      Code Type = Auto->JS
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      End Routine:
        time_PreLocalisationEnd = globalClock.getTime()

        thisExp.addData('time_PreLocalisationEnd', time_PreLocalisationEnd)
  Routine ISI3
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    TextComponent ISI3_cross
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_3_jitter
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  Routine MainInstructions
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    CodeComponent TaskBlockTotal
      Code Type = Auto->JS
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      Begin Routine:
        Ins = ("Task block: " + str(BlockNo) + " of 4")
        win.setMouseVisible(True)
    TextComponent NumberOBlocks_2
      color = black
      letterHeight = 0.06
      pos = (0.001, 0.24449)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ins
      wrapWidth = 0.75
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    TextComponent InstructionsMainText
      letterHeight = 0.04
      pos = (0, -0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
      wrapWidth = 0.75
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    TextComponent NumberOBlocks
      letterHeight = 0.06
      pos = (0.00, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ins
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    TextComponent ContinueButtonText
      color [set every frame] = white
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click here to begin
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    PolygonComponent ContinueButton
      lineColor [set every frame] = white
      pos = (0, -0.3)
      shape = rectangle
      size = (0.37, 0.09)
      startVal [time (s)] = 0.0
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    CodeComponent Button_Animation
      Code Type = Auto->JS
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      Each Frame:
        if ContinueButton.contains(mouse):
            ContinueButton.lineColor = 'yellow'
            ContinueButtonText.color = 'yellow'
        else:
            ContinueButton.lineColor = 'white'
            ContinueButtonText.color = 'white'
    MouseComponent mouse_3
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine BlockAdder
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    CodeComponent Adder
      Code Type = Auto->JS
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      Begin Routine:
        BlockNo = BlockNo + 1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Time_gap
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    TextComponent Focus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = ·
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    CodeComponent Mouse_wipe_2
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(False)
  Routine EndScreen
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    TextComponent EndScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 0.65
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      text:
        You have now completed the experiment. Thank you.

        Please inform the researcher.

        Press 'qt' to close this window.
    CodeComponent QuitChecker_3
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if 'q' in keys and 't' in keys:
                core.quit()
  Routine Startup_screen
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    TextComponent NumberOBlocks_4
      letterHeight = 0.04
      pos = (0.0, 0.01)
      startVal [time (s)] = 0.0
      wrapWidth = 0.75
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      text [set every repeat]:
        Welcome to the 'Colour Change Detection Task'. Version

        Instructions for this task will appear on the next screen.
    TextComponent ContinueButtonText_2
      color [set every frame] = white
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click here to continue
      wrapWidth = 0.75
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    TextComponent Version_Text
      color = black
      letterHeight = 0.04
      pos = (0.2625, 0.061675)
      startVal [time (s)] = 0.0
      text = $TaskVersion
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    PolygonComponent ContinueButton_2
      lineColor [set every frame] = white
      pos = (0, -0.3)
      shape = rectangle
      size = (0.37, 0.09)
      startVal [time (s)] = 0.0
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    CodeComponent Button_Animation_2
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if ContinueButton_2.contains(mouse):
            ContinueButton_2.lineColor = 'yellow'
            ContinueButtonText_2.color = 'yellow'
        else:
            ContinueButton_2.lineColor = 'white'
            ContinueButtonText_2.color = 'white'
    MouseComponent mouse_4
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent QuitChecker
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if 'q' in keys and 't' in keys:
                core.quit()
  Routine Instructions_Begin
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    TextComponent NumberOBlocks_5
      letterHeight = 0.035
      pos = (0.00, 0.01)
      startVal [time (s)] = 0.0
      wrapWidth = 0.75
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      text [set every repeat]:
        In this task, you must detect changes which appear onscreen.

        A set of squares will appear for a short period. After, the squares will reappear with one square having a new colour.

        Please remember the original colour of the square.
    TextComponent ContinueButtonText_3
      color [set every frame] = white
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click here to continue
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    PolygonComponent ContinueButton_3
      lineColor [set every frame] = white
      pos = (0, -0.3)
      shape = rectangle
      size = (0.37, 0.09)
      startVal [time (s)] = 0.0
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    CodeComponent Button_Animation_3
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if ContinueButton_3.contains(mouse):
            ContinueButton_3.lineColor = 'yellow'
            ContinueButtonText_3.color = 'yellow'
        else:
            ContinueButton_3.lineColor = 'white'
            ContinueButtonText_3.color = 'white'
    MouseComponent mouse_5
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent QuitChecker_2
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if 'q' in keys and 't' in keys:
                core.quit()
  Routine Instructions_Begin_2
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    TextComponent NumberOBlocks_6
      letterHeight = 0.04
      pos = (0.00, 0.01)
      startVal [time (s)] = 0.0
      wrapWidth = 0.75
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      text [set every repeat]:
        Once the squares reappear, click on the square which changed.

        Then, identify the original colour of the square using the colour wheel.

        You are being timed.

        You will now complete a quick tutorial.
    TextComponent ContinueButtonText_4
      color [set every frame] = white
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to start the tutorial
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    PolygonComponent ContinueButton_4
      lineColor [set every frame] = white
      pos = (0, -0.3)
      shape = rectangle
      size = (0.37, 0.09)
      startVal [time (s)] = 0.0
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    CodeComponent Button_Animation_4
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if ContinueButton_4.contains(mouse):
            ContinueButton_4.lineColor = 'yellow'
            ContinueButtonText_4.color = 'yellow'
        else:
            ContinueButton_4.lineColor = 'white'
            ContinueButtonText_4.color = 'white'
    MouseComponent mouse_6
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ISI_tutorial
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    TextComponent ISI1_cross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text [set every repeat] = ·
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    CodeComponent Mouse_wipe_3
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(False)
  Routine Stimulus_disp_tutorial
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    TextComponent Fixation_Point_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ·
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    PolygonComponent Target_3
      fillColor [set every repeat] = $[0.6000, -0.0510, 0.3098]
      pos [set every repeat] = (0.1,0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan1_3
      fillColor [set every repeat] = $[-1.0000, 0.2392, -0.0980]
      pos [set every repeat] = (-0.1,-0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan2_3
      fillColor [set every repeat] = $[-0.4118, -1.0000, 0.0196]
      pos [set every repeat] = (0.1,-0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan3_3
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan4_3
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan5_3
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Stim_disp_tutorial
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    MouseComponent mouse_7
      clickable = Target_2, Flan1_2, Flan2_2, Flan3_2, Flan4_2, Flan5_2
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if Target_2.contains(mouse):
            Target_2.lineColor = 'white'
        else:
            Target_2.lineColor = 'grey'

        if Flan1_2.contains(mouse):
            Flan1_2.lineColor = 'white'
        else:
            Flan1_2.lineColor = 'grey'

        if Flan2_2.contains(mouse):
            Flan2_2.lineColor = 'white'
        else:
            Flan2_2.lineColor = 'grey'

        if Flan3_2.contains(mouse):
            Flan3_2.lineColor = 'white'
        else:
            Flan3_2.lineColor = 'grey'

        if Flan4_2.contains(mouse):
            Flan4_2.lineColor = 'white'
        else:
            Flan4_2.lineColor = 'grey'

        if Flan5_2.contains(mouse):
            Flan5_2.lineColor = 'white'
        else:
            Flan5_2.lineColor = 'grey'
    TextComponent Fixation_Point_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ·
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    PolygonComponent Target_4
      fillColor [set every repeat] = $Change_colour
      lineWidth = 3.5
      pos [set every repeat] = $Targ_Loc
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan1_4
      fillColor [set every repeat] = $Flan1_Colour
      lineWidth = 3.5
      pos [set every repeat] = $Flan1_Loc
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan2_4
      fillColor [set every repeat] = $Flan2_Colour
      lineWidth = 3.5
      pos [set every repeat] = $Flan2_Loc
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan3_4
      fillColor [set every repeat] = $Flan3_Colour
      lineWidth = 3.5
      pos [set every repeat] = $Flan3_Loc
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan4_4
      fillColor [set every repeat] = $Flan4_Colour
      lineWidth = 3.5
      pos [set every repeat] = $Flan4_Loc
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan5_4
      fillColor [set every repeat] = $Flan5_Colour
      lineWidth = 3.5
      pos [set every repeat] = $Flan5_Loc
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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  Routine Loc_choice_tut
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    MouseComponent mouse_8
      clickable = Target_5
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if Target_5.contains(mouse):
            Target_5.lineColor = 'green'
        else:
            Target_5.lineColor = 'grey'

        if Flan1_5.contains(mouse):
            Flan1_5.lineColor = 'red'
        else:
            Flan1_5.lineColor = 'grey'

        if Flan2_5.contains(mouse):
            Flan2_5.lineColor = 'red'
        else:
            Flan2_5.lineColor = 'grey'
    TextComponent Fixation_Point_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ·
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    PolygonComponent Target_5
      fillColor [set every repeat] = $[-1.0000, -1.0000, -1.0000]
      lineWidth = 3.5
      pos [set every repeat] = (0.1,0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan1_5
      fillColor [set every repeat] = $[-1.0000, 0.2392, -0.0980]
      lineWidth = 3.5
      pos [set every repeat] = (-0.1,-0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan2_5
      fillColor [set every repeat] = $[-0.4118, -1.0000, 0.0196]
      lineWidth = 3.5
      pos [set every repeat] = (0.1,-0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan3_5
      lineWidth = 3.5
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan4_5
      lineWidth = 3.5
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan5_5
      lineWidth = 3.5
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent ArrowHead
      fillColor = green
      ori = 270
      pos = (0.19, 0.1)
      shape = triangle
      size = (0.05, 0.05)
      startVal [time (s)] = 2
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    PolygonComponent ArrowBar
      fillColor = green
      lineWidth = 2
      pos = (0.24, 0.1)
      shape = rectangle
      size = (0.07, 0.008)
      startVal [time (s)] = 2
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    TextComponent InstruText2
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Select the square which changed colour.
      wrapWidth = 0.75
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  Routine Choice_tutorial
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    CodeComponent ColourChoice_2
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)


        wedgeYellow.setAutoDraw(True)
        wedgeWhite.setAutoDraw(True)
        wedgeVermilion.setAutoDraw(True)
        wedgeRedPurple.setAutoDraw(True)

        wedgeBlack.setAutoDraw(True)
        wedgeIndigo.setAutoDraw(True)
        wedgeSkyBlue.setAutoDraw(True)
        wedgeBlueGreen.setAutoDraw(True)

        GreyCircle.setAutoDraw(True)
      Each Frame:
        if (wedgeYellow.contains(mouse)):
            wedgeYellow.lineColor = 'red'
            GuideYellow.setAutoDraw(True)
        else:
            wedgeYellow.lineColor = 'grey'
            GuideYellow.setAutoDraw(False)

        if wedgeWhite.contains(mouse):
            wedgeWhite.lineColor = 'red'
            GuideWhite.setAutoDraw(True)
        else:
            wedgeWhite.lineColor = 'grey'
            GuideWhite.setAutoDraw(False)

        if wedgeVermilion.contains(mouse):
            wedgeVermilion.lineColor = 'red'
            GuideVermilion.setAutoDraw(True)
        else:
            wedgeVermilion.lineColor = 'grey'
            GuideVermilion.setAutoDraw(False)

        if wedgeRedPurple.contains(mouse):
            wedgeRedPurple.lineColor = 'green'
            GuideRedPurple.setAutoDraw(True)
        else:
            wedgeRedPurple.lineColor = 'grey'
            GuideRedPurple.setAutoDraw(False)

        if wedgeBlack.contains(mouse):
            wedgeBlack.lineColor = 'red'
            GuideBlack.setAutoDraw(True)
        else:
            wedgeBlack.lineColor = 'grey'
            GuideBlack.setAutoDraw(False)

        if wedgeIndigo.contains(mouse):
            wedgeIndigo.lineColor = 'red'
            GuideIndigo.setAutoDraw(True)
        else:
            wedgeIndigo.lineColor = 'grey'
            GuideIndigo.setAutoDraw(False)

        if wedgeSkyBlue.contains(mouse):
            wedgeSkyBlue.lineColor = 'red'
            GuideSkyBlue.setAutoDraw(True)
        else:
            wedgeSkyBlue.lineColor = 'grey'
            GuideSkyBlue.setAutoDraw(False)

        if wedgeBlueGreen.contains(mouse):
            wedgeBlueGreen.lineColor = 'red'
            GuideBlueGreen.setAutoDraw(True)
        else:
            wedgeBlueGreen.lineColor = 'grey'
            GuideBlueGreen.setAutoDraw(False)
    MouseComponent mouse_9
      clickable = wedgeRedPurple
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent ArrowHead2
      fillColor = green
      ori = 90
      pos = (0.165, -0.33)
      shape = triangle
      size = (0.05, 0.05)
      startVal [time (s)] = 2
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    PolygonComponent ArrowBar2
      fillColor = green
      ori = 53
      pos = (0.1831, -0.365)
      shape = rectangle
      size = (0.07, 0.01)
      startVal [time (s)] = 2
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    TextComponent InstruText
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Select the original colour of the square.
      wrapWidth = 0.65
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  Routine Clear_sc_tut
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    CodeComponent Clear_Screen_3
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(False)

        GreyCircle.setAutoDraw(False)

        wedgeYellow.setAutoDraw(False)
        wedgeWhite.setAutoDraw(False)
        wedgeVermilion.setAutoDraw(False)
        wedgeRedPurple.setAutoDraw(False)

        wedgeBlack.setAutoDraw(False)
        wedgeIndigo.setAutoDraw(False)
        wedgeSkyBlue.setAutoDraw(False)
        wedgeBlueGreen.setAutoDraw(False)

        GuideYellow.setAutoDraw(False)
        GuideWhite.setAutoDraw(False)
        GuideVermilion.setAutoDraw(False)
        GuideRedPurple.setAutoDraw(False)

        GuideBlack.setAutoDraw(False)
        GuideIndigo.setAutoDraw(False)
        GuideSkyBlue.setAutoDraw(False)
        GuideBlueGreen.setAutoDraw(False)
  Routine Tutorial_end
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    TextComponent NumberOBlocks_7
      letterHeight = 0.04
      pos = (0.00, 0.01)
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text [set every repeat]:
        Well done! You have completed the tutorial.

        You may now begin the main task.
    TextComponent ContinueButtonText_5
      color [set every frame] = white
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to begin the task
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    PolygonComponent ContinueButton_5
      lineColor [set every frame] = white
      pos = (0, -0.3)
      shape = rectangle
      size = (0.37, 0.09)
      startVal [time (s)] = 0.0
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    CodeComponent Button_Animation_5
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if ContinueButton_5.contains(mouse):
            ContinueButton_5.lineColor = 'yellow'
            ContinueButtonText_5.color = 'yellow'
        else:
            ContinueButton_5.lineColor = 'white'
            ContinueButtonText_5.color = 'white'
    MouseComponent mouse_10
      clickable = ContinueButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Well done! Let's try another.
      wrapWidth = 0.65
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  Routine break_3
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Stimulus_disp_tutorial_2
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    TextComponent Fixation_Point_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ·
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    PolygonComponent Target_6
      fillColor [set every repeat] = $[-0.3255, 0.4118, 0.8275]
      pos [set every repeat] = (0.2,0.2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan1_6
      fillColor [set every repeat] = $[0.6000, -0.0510, 0.3098]
      pos [set every repeat] = (-0.1,-0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan2_6
      fillColor [set every repeat] = $[-1.0000, -1.0000, -1.0000]
      pos [set every repeat] = (0.1,-0.3)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan3_6
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan4_6
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Flan5_6
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine ISI_tutorial_2
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    TextComponent ISI1_cross_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text [set every repeat] = ·
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    CodeComponent Mouse_wipe_4
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(False)
  Routine Loc_choice_tut_2
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    MouseComponent mouse_11
      clickable = Target_7
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        win.setMouseVisible(True)
      Each Frame:
        if Target_7.contains(mouse):
            Target_7.lineColor = 'green'
        else:
            Target_7.lineColor = 'grey'

        if Flan1_7.contains(mouse):
            Flan1_7.lineColor = 'red'
        else:
            Flan1_7.lineColor = 'grey'

        if Flan2_7.contains(mouse):
            Flan2_7.lineColor = 'red'
        else:
            Flan2_7.lineColor = 'grey'
    TextComponent Fixation_Point_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ·
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    PolygonComponent Target_7
      fillColor [set every repeat] = $[0.6706, -0.2627, -1.0000]
      lineWidth = 3.5
      pos [set every repeat] = (0.2,0.2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan1_7
      fillColor [set every repeat] = $[0.6000, -0.0510, 0.3098]
      lineWidth = 3.5
      pos [set every repeat] = (-0.1,-0.1)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan2_7
      fillColor [set every repeat] = $[-1.0000, -1.0000, -1.0000]
      lineWidth = 3.5
      pos [set every repeat] = (0.1,-0.3)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan3_7
      lineWidth = 3.5
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan4_7
      lineWidth = 3.5
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    PolygonComponent Flan5_7
      lineWidth = 3.5
      pos [set every repeat] = (2,2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    TextComponent InstruText2_2
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Select the square which changed colour.
      wrapWidth = 0.75
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  Routine Choice_tutorial_2
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    CodeComponent ColourChoice_3
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        if (wedgeYellow.contains(mouse)):
            wedgeYellow.lineColor = 'red'
            GuideYellow.setAutoDraw(True)
        else:
            wedgeYellow.lineColor = 'grey'
            GuideYellow.setAutoDraw(False)

        if wedgeWhite.contains(mouse):
            wedgeWhite.lineColor = 'red'
            GuideWhite.setAutoDraw(True)
        else:
            wedgeWhite.lineColor = 'grey'
            GuideWhite.setAutoDraw(False)

        if wedgeVermilion.contains(mouse):
            wedgeVermilion.lineColor = 'red'
            GuideVermilion.setAutoDraw(True)
        else:
            wedgeVermilion.lineColor = 'grey'
            GuideVermilion.setAutoDraw(False)

        if wedgeRedPurple.contains(mouse):
            wedgeRedPurple.lineColor = 'red'
            GuideRedPurple.setAutoDraw(True)
        else:
            wedgeRedPurple.lineColor = 'grey'
            GuideRedPurple.setAutoDraw(False)

        if wedgeBlack.contains(mouse):
            wedgeBlack.lineColor = 'red'
            GuideBlack.setAutoDraw(True)
        else:
            wedgeBlack.lineColor = 'grey'
            GuideBlack.setAutoDraw(False)

        if wedgeIndigo.contains(mouse):
            wedgeIndigo.lineColor = 'red'
            GuideIndigo.setAutoDraw(True)
        else:
            wedgeIndigo.lineColor = 'grey'
            GuideIndigo.setAutoDraw(False)

        if wedgeSkyBlue.contains(mouse):
            wedgeSkyBlue.lineColor = 'green'
            GuideSkyBlue.setAutoDraw(True)
        else:
            wedgeSkyBlue.lineColor = 'grey'
            GuideSkyBlue.setAutoDraw(False)

        if wedgeBlueGreen.contains(mouse):
            wedgeBlueGreen.lineColor = 'red'
            GuideBlueGreen.setAutoDraw(True)
        else:
            wedgeBlueGreen.lineColor = 'grey'
            GuideBlueGreen.setAutoDraw(False)
    MouseComponent mouse_12
      clickable = wedgeSkyBlue
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent InstruText_2
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Select the original colour of the square.
      wrapWidth = 0.65
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Flow
  Routine Startup_code
  Routine Startup_screen
  Routine Instructions_Begin
  Routine Instructions_Begin_2
  Routine ISI_tutorial
  Routine Stimulus_disp_tutorial
  Routine ISI_tutorial
  Routine Loc_choice_tut
  Routine ISI_tutorial
  Routine Choice_tutorial
  Routine Clear_sc_tut
  Routine break_2
  Routine ISI_tutorial_2
  Routine Stimulus_disp_tutorial_2
  Routine ISI_tutorial_2
  Routine Loc_choice_tut_2
  Routine ISI_tutorial_2
  Routine Choice_tutorial_2
  Routine Clear_sc_tut
  Routine Tutorial_end
  Routine break_3
  LoopInitiator MasterTrialLoop loopType="TrialHandler"
    conditionsFile = $VersionSelection
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CondFile': 'Conditions/3_square_trial.xlsx', 'Instructions': 'To begin, three squares will appear on screen at once. You must detect changed square and identify its original colour.'},
      {'CondFile': 'Conditions/4_square_trial.xlsx', 'Instructions': 'You will now have four squares on the screen at once.'},
      {'CondFile': 'Conditions/5_square_trial.xlsx', 'Instructions': 'You will now have five squares on the screen at once.'},
      {'CondFile': 'Conditions/6_square_trial.xlsx', 'Instructions': 'This is the final block. You will now have six squares on the screen at once.'}]
    Routine MainInstructions
    Routine Time_gap
    LoopInitiator MainTrialLoop loopType="TrialHandler"
      conditionsFile = $CondFile
      loopType = sequential
      nReps = 1
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      Routine ISI
      Routine Stimulus_display
      Routine ISI2
      Routine Location_choice
      Routine ISI3
      Routine Colour_choice
      Routine Clear_Screen
    LoopTerminator MainTrialLoop
    Routine BlockAdder
  LoopTerminator MasterTrialLoop
  Routine EndScreen
